20240603_102528 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
4,0;Trough 100ml;Buffer
4,1;Trough 100ml;Quenching
4,2;Trough 100ml;IPA
7,0;4 Well Plate;Labware1
7,1;12 Well Plate;washing
13,1;600mL beaker;beaker
19,2;CP greiner PP black;ColdPlate
35,0;96 Well Microplate Nuncheat;Dest2
35,1;96 Well Nuncheat+ PCR;Dest
46,2;water bath;water bath
1;System
69;Magellan
47;BD Hotel MTP 4Pos;96 Well Microplate Nuncflat
52;BD Hotel MTP 4Pos;96 Well Microplate Nuncflat
57;BD Hotel MTP 4Pos;96 Well Microplate Nuncflat
62;BD Hotel MTP 4Pos;96 Well Microplate Nuncflat
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--{ RPG }--
Wash(255,1,1,1,0,"3",500,"4",500,10,70,30,1,0,1000,0);
Variable(detected_volume_1,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("5","filling water");
OnError(0,3);
Detect_Liquid(1,"WGQ_DMSO",46,2,1,"010880",0,0);
Variable(volume_needed,"(2890-detected_volume_1)/31.5",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(v_tip,"volume_needed/8",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("v_tip",3,"0.01");
Variable(v_tip,"0.01",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Wash(255,1,1,46,2,"0",500,"v_tip",500,10,70,30,0,0,1000,0);
EndLoop();
Wash(255,1,1,1,0,"3",500,"4",500,10,70,30,1,0,1000,0);
Mix(255,">> WGQ_solvent <<	568","400","400","400","400","400","400","400","400",0,0,0,0,7,1,1,"0C08¯1000000000000",30,0,0);
Mix(255,">> WGQ_solvent <<	569","400","400","400","400","400","400","400","400",0,0,0,0,7,1,1,"0C080®300000000000",30,0,0);
Wash(255,1,1,1,0,"8",500,"8",500,10,70,30,1,0,1000,0);
