F2F2DB6C
20241013_161010 Admin           
update                                                                                                                          
Administrator                                                                                                                   
--{ RES }--
V;200
--{ CFG }--
999;219;32;
14;-1;30;-1;-1;16;-1;-1;96;-1;-1;-1;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-1;
998;0;
998;3;Wash Station Cleaner shallow;Wash Station Waste;Wash Station Cleaner deep;
998;;;;
998;0;
998;0;
998;3;Trough 100ml;Trough 100ml;Trough 100ml;
998;IPA;TMB;Quenching;
998;0;
998;0;
998;3;12 Well Plate;;;
998;Labware1;;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;;;;
998;;;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;;;CP greiner PP black;
998;;;ColdPlate;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;;;;
998;;;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;2;96 Well Microplate Nuncheat;96 Well Nuncheat+ PCR;
998;Dest2;Dest;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
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998;6;
998;4;0;System;
998;0;4;Magellan;
998;0;0;BD Hotel MTP 4Pos;
998;0;1;BD Hotel MTP 4Pos;
998;0;2;BD Hotel MTP 4Pos;
998;0;3;BD Hotel MTP 4Pos;
998;4;
998;324;96 Well Microplate Nuncflat;
998;324;96 Well Microplate Nuncflat;
998;324;96 Well Microplate Nuncflat;
998;324;96 Well Microplate Nuncflat;
998;1;
998;69;
998;47;
998;52;
998;57;
998;62;
996;0;0;
--{ RPG }--
Wash(255,1,1,1,0,"5",500,"5",500,10,70,30,1,0,1000,0);
BeginLoop("11","add_enzyme");
Aspirate(255,"WGQ_enzyme","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v",0,0,0,0,19,2,1,"0C0800000o0000000",0,0);
Dispense(255,"WGQ_enzyme","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v",0,0,0,0,35,1,1,"0C080®300000000000",1,"add_enzyme",0,1,0);
Mix(255,"WGQ_transfer_deactivation","60","60","60","60","60","60","60","60",0,0,0,0,35,1,1,"0C080®300000000000",5,1,"add_enzyme",0,1,0);
Subroutine("~local_subroutine_path~\heat_challenge_commands\incubation_hc.esc",0);
MoveLiha(255,35,1,1,"0C080®300000000000",4,0,0,10,1,"add_enzyme",0,1,0);
Wash(255,1,1,1,0,"3",500,"4",500,10,70,30,1,0,1000,0);
EndLoop();
Subroutine("~local_subroutine_path~\shared_protocols\cap_coldplate.esc",0);
Subroutine("~local_subroutine_path~\heat_challenge_commands\heat_deactivation.esc",0);
Subroutine("~local_subroutine_path~\shared_protocols\remove_coldplate_lid.esc",0);
Group("add_control_enzyme");
Wash(255,1,1,1,0,"3",500,"4",500,10,70,30,1,0,1000,0);
Aspirate(255,"WGQ_enzyme","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v",0,0,0,0,19,2,1,"0C0800000o0000000",0,0);
Dispense(255,"WGQ_enzyme","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v",0,0,0,0,35,1,1,"0C08¯1000000000000",0,0);
Mix(255,"WGQ_transfer_deactivation","60","60","60","60","60","60","60","60",0,0,0,0,35,1,1,"0C08¯1000000000000",5,0,0);
Subroutine("~local_subroutine_path~\heat_challenge_commands\incubation_hc.esc",0);
MoveLiha(255,35,1,1,"0C08¯1000000000000",4,0,0,10,0,0);
Wash(255,1,1,1,0,"3",500,"4",500,10,70,30,1,0,1000,0);
GroupEnd();
Subroutine("~local_subroutine_path~\shared_protocols\cap_coldplate.esc",0);
Subroutine("~local_subroutine_path~\heat_challenge_commands\transfer_deactivation.esc",0);
Subroutine("~local_subroutine_path~\shared_protocols\remove_coldplate_lid.esc",0);
BeginLoop("12","add_enzyme");
Aspirate(255,"WGQ_enzyme","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v",0,0,0,0,19,2,1,"0C08000000000000 O",0,0);
Dispense(255,"WGQ_enzyme","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v","GOx_v",0,0,0,0,35,0,1,"0C08¯1000000000000",1,"add_enzyme",0,1,0);
Wash(255,1,1,1,0,"3",500,"4",500,10,70,30,1,0,1000,0);
EndLoop();
Subroutine("~local_subroutine_path~\shared_protocols\cap_coldplate.esc",0);
