20241013_155039 Admin
update
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
4,0;Trough 100ml;IPA
4,1;Trough 100ml;TMB
4,2;Trough 100ml;Quenching
19,2;CP greiner PP black;ColdPlate
35,0;96 Well Microplate Nuncheat;Dest
1;System
69;Magellan
47;BD Hotel MTP 4Pos;96 Well Microplate Nuncflat
52;BD Hotel MTP 4Pos;96 Well Microplate Nuncflat
57;BD Hotel MTP 4Pos;96 Well Microplate Nuncflat
62;BD Hotel MTP 4Pos;96 Well Microplate Nuncflat
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--{ RPG }--
Wash(255,1,1,1,0,"3",500,"4",500,10,70,30,1,0,1000,0);
BeginLoop("12","add_substrate");
Aspirate(255,"WGQ_TMB","TMB_v","TMB_v","TMB_v","TMB_v","TMB_v","TMB_v","TMB_v","TMB_v",0,0,0,0,4,1,1,"0108¯1",0,0);
Dispense(255,"WGQ_TMB","TMB_v","TMB_v","TMB_v","TMB_v","TMB_v","TMB_v","TMB_v","TMB_v",0,0,0,0,35,0,1,"0C08¯1000000000000",1,"add_substrate",0,1,0);
Subroutine("~local_subroutine_path~\shared_protocols\incubation.esc",0);
MoveLiha(255,35,0,1,"0C08¯1000000000000",4,0,0,10,1,"add_substrate",0,1,0);
Wash(255,1,1,1,0,"3",500,"4",500,10,70,30,1,0,1000,0);
EndLoop();
BeginLoop("12","quenching");
Aspirate(255,"WGQ_TMB","Quenching_v","Quenching_v","Quenching_v","Quenching_v","Quenching_v","Quenching_v","Quenching_v","Quenching_v",0,0,0,0,4,2,1,"0108¯1",0,0);
Dispense(255,"WGQ_TMB","Quenching_v","Quenching_v","Quenching_v","Quenching_v","Quenching_v","Quenching_v","Quenching_v","Quenching_v",0,0,0,0,35,0,1,"0C08¯1000000000000",1,"quenching",0,1,0);
Subroutine("~local_subroutine_path~\shared_protocols\incubation.esc",0);
MoveLiha(255,35,0,1,"0C08¯1000000000000",4,0,0,10,0,0);
Wash(255,1,1,1,0,"3",500,"4",500,10,70,30,1,0,1000,0);
EndLoop();
BeginLoop("12","add_IPA");
Aspirate(255,">> WGQ_TMB <<	185","IPA_v","IPA_v","IPA_v","IPA_v","IPA_v","IPA_v","IPA_v","IPA_v",0,0,0,0,4,0,1,"0108¯1",0,0);
Dispense(255,">> WGQ_TMB <<	187","IPA_v","IPA_v","IPA_v","IPA_v","IPA_v","IPA_v","IPA_v","IPA_v",0,0,0,0,35,0,1,"0C08¯1000000000000",1,"add_IPA",0,1,0);
Subroutine("~local_subroutine_path~\shared_protocols\incubation.esc",0);
MoveLiha(255,35,0,1,"0C08¯1000000000000",4,0,0,10,1,"add_IPA",0,1,0);
Wash(255,1,1,1,0,"3",500,"4",500,10,70,30,1,0,1000,0);
EndLoop();
